<CompuCell3D Revision="2" Version="4.5.0">
   
   <Metadata>
      
      <!-- Basic properties simulation -->
      <NumberOfProcessors>1</NumberOfProcessors>
      <DebugOutputFrequency>10</DebugOutputFrequency>
      <!-- <NonParallelModule Name="Potts"/> -->
   </Metadata>
   
   <Potts>
      
      <!-- Basic properties of CPM (GGH) algorithm -->
      <Dimensions x="256" y="256" z="1"/>
      <Steps>100000</Steps>
      <Temperature>10.0</Temperature>
      <NeighborOrder>1</NeighborOrder>
   </Potts>
   
   <Plugin Name="CellType">
      
      <!-- Listing all cell types in the simulation -->
      <CellType TypeId="0" TypeName="Medium"/>
      <CellType TypeId="1" TypeName="type1"/>
      <CellType TypeId="2" TypeName="type2"/>
   </Plugin>
   
   <Plugin Name="Volume">
      <VolumeEnergyParameters CellType="type1" LambdaVolume="2.0" TargetVolume="50"/>
      <VolumeEnergyParameters CellType="type2" LambdaVolume="2.0" TargetVolume="50"/>
   </Plugin>
   
   <Plugin Name="CenterOfMass">
      
      <!-- Module tracking center of mass of each cell -->
   </Plugin>
   
   <Plugin Name="NeighborTracker">
      
      <!-- Module tracking neighboring cells of each cell -->
   </Plugin>
   
   <Plugin Name="Contact">
      <!-- Specification of adhesion energies -->
      <Energy Type1="Medium" Type2="Medium">10.0</Energy>
      <Energy Type1="Medium" Type2="type1">10.0</Energy>
      <Energy Type1="Medium" Type2="type2">10.0</Energy>
      <Energy Type1="type1" Type2="type1">10.0</Energy>
      <Energy Type1="type1" Type2="type2">10.0</Energy>
      <Energy Type1="type2" Type2="type2">10.0</Energy>
      <NeighborOrder>4</NeighborOrder>
   </Plugin>
   
   <Steppable Type="UniformInitializer">
      
      <!-- Initial layout of cells in the form of rectangular slab -->
      <Region>
         <BoxMin x="51" y="51" z="0"/>
         <BoxMax x="204" y="204" z="1"/>
         <Gap>0</Gap>
         <Width>7</Width>
         <Types>type1,type2</Types>
      </Region>
   </Steppable>
</CompuCell3D>
